---
API: 3
OpenSesame: 4.0.5
Platform: nt
---
set width 1024
set title "Nouvelle expérience"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path None
set disable_garbage_collection yes
set description "The main experiment item"
set canvas_backend psycho
set background "#3d3846"

define form_text_display _form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define sketchpad dijkstra_sketchpad
	set duration keypress
	set description "Affiche les stimuli"
	draw image center=1 file="exempleGraph.png" scale=0.6 show_if=True x=-320 y=160 z_index=0
	draw image center=1 file="tablDijk.png" scale=1.3 show_if=True x=192 y=96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Voici la méthode pour découvrir le chemin le plus court dans un graphe en utilisant l'algorithme de Dijkstra. On établit un tableau où les colonnes représentent les points du graphe, et chaque ligne correspond à une itération de l'algorithme." x=0.0 y=-320.0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Les cases sont remplies par les valeurs potentielles pour atteindre les points. On met entre parenthèses le dernier point par lequel on passe pour l'atteindre." x=0.0 y=-128.0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="La première ligne de la matrice est initialisée en attribuant une valeur de 0 au point de départ et en attribuant une valeur infinie à tous les autres points." x=0.0 y=-192.0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Lance un certain nombre d'éléments en séquence"
	run getting_started True
	run intro_sketchpad True
	run new_inline_script True
	run dijkstra_sketchpad True
	run new_loop True

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad intro_sketchpad
	set duration keypress
	set description "Affiche les stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="La théorie des graphes est un domaine situé à la frontière entre les mathématiques et l'informatique, qui consiste à représenter les problèmes rencontrés par les humains afin de trouver des solutions algorithmiques." x=0 y=-320 z_index=0
	draw image center=1 file="exempleGraph.png" scale=1 show_if=True x=32 y=32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="touche espace pour continuer" x=-32 y=320 z_index=0

define form_text_input new_1_form_text_input
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Title
	set form_question poire
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="{form_title}"
	widget 0 1 1 1 label center=no text="{form_question}"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="{form_var}"


define sequence new_1_sequence
	set flush_keyboard yes
	set description "Lance un certain nombre d'éléments en séquence"
	run new_sketchpad True
	run new_2_form_text_input True

define form_text_input new_2_form_text_input
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Title
	__form_question__
	it    |M    |SE    |SR    |UPV
	0     |[0]  |inf   |inf   |inf
	1
	__end__
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="{form_title}"
	widget 0 1 1 1 label center=no text="{form_question}"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="{form_var}"


define coroutines new_coroutines
	set function_name ""
	set flush_keyboard yes
	set end_after_item ""
	set duration 5000
	set description "Lance un certain nombre d'éléments en séquence"

define form_base new_form_base
	set timeout infinite
	set spacing 10
	set rows "2;2"
	set only_render no
	set margins "50;50;50;50"
	set description "A generic form plug-in"
	set cols "2;2"
	set _theme gray


define form_consent new_form_consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "Consent form"
	__form_text__
	You are about to participate in an experiment.
	
	This experiment poses no known risks to your health and your name will not be associated with the findings.
	
	Upon completion of your participation in this study you will be provided with a brief explanation of the question this study addresses.
	
	If you have any questions not addressed by this consent form, please do not hesitate to ask.
	
	You can stop at any time during experiment if you feel uncomfortable.
	__end__
	set description "A generic form plug-in"
	set decline_text "Do not participate"
	set decline_message "You need to accept the consent form to participate!"
	set cols "2;2"
	set checkbox_text "I have read and understood the information shown above"
	set accept_text "Participate!"
	set _theme gray
	widget 0 0 2 1 label text="{form_title}"
	widget 0 1 2 1 label center=no text="{form_text}"
	widget 0 2 2 1 checkbox text="{checkbox_text}" var=checkbox_status
	widget 0 3 1 1 button text="{accept_text}" var=accept_status
	widget 1 3 1 1 button text="{decline_text}"


define form_multiple_choice new_form_multiple_choice
	set timeout infinite
	set spacing 10
	__question__
	it   M    SE    SR
	0    1    2    3    
	__end__
	__options__
	njkkj
	nll
	n;k
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple yes
	set advance_immediately yes
	set _theme gray

define form_text_input new_form_text_input
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Title
	set form_question "Your questionopo"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="{form_title}"
	widget 0 1 1 1 label center=no text="{form_question}"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="{form_var}"


define inline_script new_inline_script
	set description "Exécute du code Python"
	___run__
	# Importer la bibliothèque pandas
	import pandas as pd
	
	# Créer un dictionnaire de données
	data = {
	    'Nom': ['Alice', 'Bob', 'Charlie', 'David'],
	    'age': [25, 30, 35, 40],
	    'Ville': ['Paris', 'New York', 'Londres', 'Berlin']
	}
	
	# Créer un DataFrame à partir du dictionnaire
	df = pd.DataFrame(data)
	
	# Convertir le DataFrame en une chaîne de caractères
	df_str = df.to_string(index=False)
	
	# Assigner la chaîne de caractères à une variable dans OpenSesame
	exp.set("my_dataframe", df_str)
	__end__
	___prepare__
	# Importer la bibliothèque pandas
	import pandas as pd
	
	# Créer un dictionnaire de données
	data = {
	    'Nom': ['Alice', 'Bob', 'Charlie', 'David'],
	    'age': [25, 30, 35, 40],
	    'Ville': ['Paris', 'New York', 'Londres', 'Berlin']
	}
	
	# Créer un DataFrame à partir du dictionnaire
	df = pd.DataFrame(data)
	
	# Convertir le DataFrame en une chaîne de caractères
	df_str = df.to_string(index=False)
	
	# Assigner la chaîne de caractères à une variable dans OpenSesame
	exp.set("my_dataframe", df_str)
	__end__

define keyboard_response new_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collecte les réponses du clavier"

define logger new_logger
	set description "Enregistre les données expérimentales"
	set auto_log yes

define loop new_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Exécute à plusieurs reprises un autre élément"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run new_1_sequence

define sequence new_sequence
	set flush_keyboard yes
	set description "Lance un certain nombre d'éléments en séquence"

define sketchpad new_sketchpad
	set duration keypress
	set description "Affiche les stimuli"
	draw rect color=white fill=0 h=480 penwidth=22 show_if=True w=480 x=-224 y=-288 z_index=0
	draw line color=white penwidth=22 show_if=True x1=-384 x2=128 y1=-192 y2=160 z_index=0

define synth new_synth
	set volume 1
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "Un synthétiseur de son basique"
	set decay 5
	set attack 0

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Affiche les stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="OpenSesame 4.0 <i>Melodramatic Milgram</i>" x=0.0 y=-128.0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text=iloiljl x=30.0 y=-138.0 z_index=0

